// Select the input directory
inputDir = getDirectory("Select the folder with czi files");

// Get a list of all files in the directory
listOfFiles = getFileList(inputDir);

for (fileIndex = 0; fileIndex < listOfFiles.length; fileIndex++) {
    fileName = listOfFiles[fileIndex];
    
    // Check for CZI extension
    if (endsWith(fileName, ".czi")) {
        path = inputDir + fileName;

        // Extract the base name of the file
        baseName = fileName.substring(0, fileName.lastIndexOf("."));

        run("Bio-Formats Macro Extensions");
        Ext.setId(path);
        Ext.setSeries(0);  // Set to the first series

        run("Bio-Formats Importer", 
            "open=[" + path + "] autoscale color_mode=Default split_channels view=Hyperstack stack_order=XYCZT series_0");

        setBatchMode(true);

        // Process each image opened from the series
        for (i = 1; i <= nImages; i++) {
            selectImage(i);
            channelNumber = i - 1; // Assuming channel numbering starts at 0

            // Perform Z Projection for maximum intensity before converting to 8-bit
            run("Z Project...", "projection=[Max Intensity]");
            run("8-bit");

            // Construct the new file name
            outputFileName = "M_Max" + baseName + "_C" + channelNumber + ".tif";

            // Save the projected and converted image with the new file name
            saveAs("Tiff", inputDir + File.separator + outputFileName);

            // Close the processed image
            close();
        }

        run("Close All");
        setBatchMode(false);
        print("Processed " + baseName);
    }
}
